PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 1
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = ((None,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0,-0,3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_words': 'books'},
      {'study_words': 'king'},
      {'study_words': 'house'},
      {'study_words': 'spoons'},
      {'study_words': 'cups'},
      {'study_words': 'oranges'},
      {'study_words': 'mouse'},
      {'study_words': 'joker'},
      {'study_words': 'yatch'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'b_ _ks'},
      {'test': '_i_g'},
      {'test': 'h_ _s_'},
      {'test': 's_o_n_'},
      {'test': '_u_s'},
      {'test': 'or_ _g_s'},
      {'test': 'm_us_'},
      {'test': 'j_k_r'},
      {'test': '_at_h'},
      {'test': '_en'},
      {'test': 'h_ir_a_ds'},
      {'test': 'g_og_es'},
      {'test': 'um_re_ _as'}]
    Routine test
  LoopTerminator trials_2
